PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'what is your first language?': 'English'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word_superiority_effect_v3
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent background_2
      image = bg.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextboxComponent fixation
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextboxComponent word
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.2
      size = (0.7, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $this_word
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextboxComponent question
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = Did the word contain the letter:
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    TextboxComponent lefttxt
      bold = False
      borderColor = black
      editable = False
      fillColor = -0.7333, 0.0902, -0.7333
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = YES
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    TextboxComponent righttxt
      bold = False
      borderColor = black
      editable = False
      fillColor = 0.3961, -0.7333, -0.7333
      letterHeight = 0.05
      pos = (0.3, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = NO
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    CodeComponent track_score
      Code Type = Auto->JS
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      Begin Experiment:
        word_accuracies = []
        nonword_accuracies = []
        word_rts = []
        nonword_rts = []
      End Routine:
        # --- Start of Corrected End Routine Code ---

        current_corr = 0 # Default to incorrect/no response
        current_rt = None # Default RT

        # Determine accuracy and RT based on response type (key or mouse) for the CURRENT trial
        if key_resp.keys: # Keyboard response was made
            current_corr = key_resp.corr # Use the already calculated correctness (0 or 1)
            current_rt = key_resp.rt
        elif mouse.clicked_name: # Mouse response was made (check if a clickable object name was stored)
            # Make sure mouse.clicked_name is not empty before accessing index 0
            if mouse.clicked_name: # Check list is not empty
                clicked_button = mouse.clicked_name[0] # 'lefttxt' or 'righttxt'

                # Determine correctness based on mouse click
                if clicked_button == 'lefttxt' and corr_ans == 'left':
                    current_corr = 1
                elif clicked_button == 'righttxt' and corr_ans == 'right':
                    current_corr = 1
                else:
                    current_corr = 0 # Clicked wrong button or non-clickable area if logic allows

                # Get RT (ensure mouse.time has values)
                if mouse.time:
                   current_rt = mouse.time[-1] # Get the time of the last click in this routine
            else:
                # Mouse was used, but no clickable object name recorded (e.g., clicked background)
                current_corr = 0
                if mouse.time:
                     current_rt = mouse.time[-1] # Still record RT if available

        else:
            # No valid response (neither key nor mouse click registered during response window)
            # key_resp.corr should already be 0 from earlier logic if applicable
            current_corr = 0 # Confirm incorrect
            current_rt = None # No RT

        # Now, append the CURRENT trial's data to the correct list for later averaging
        if condition == 'word':
            word_accuracies.append(current_corr)
            if current_rt is not None: # Only append RT if it exists
                word_rts.append(current_rt)
        elif condition == 'nonword':
            nonword_accuracies.append(current_corr)
            if current_rt is not None: # Only append RT if it exists
                nonword_rts.append(current_rt)

        # Add the data for the CURRENT trial to the output file
        thisExp.addData('correct', current_corr) # Save the accuracy of THIS trial
        thisExp.addData('rt', current_rt)           # Save the RT of THIS trial

        # --- End of Corrected End Routine Code ---
    MouseComponent mouse
      clickable = lefttxt, righttxt
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 1
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    TextboxComponent letter
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.2
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = $critical_letter
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    TextboxComponent trialcount
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, .45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = $str(trials.thisN) + '/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = bg.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextboxComponent instruct_txt
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        This fun game will show you a series of words.
        After each word you will be asked if that word contained a particular letter.
        Use the left and right arrow keys on the keyboard or click the onscreen buttons to answer the question:

        Left Arrow = Yes
        Right Arrow = No

        Press Space key or Click on Start button to Start
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent start
      bold = False
      borderColor = black
      editable = False
      fillColor = -0.3333, -0.1608, -0.6314
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = START
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    MouseComponent start_mouse
      clickable = start
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine end
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    ImageComponent background_3
      image = bg.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    CodeComponent calculate
      Code Type = Both
      Begin JS Routine:
        word_acc = util.average(word_accuracies);
        nonword_acc = util.average(nonword_accuracies);
        word_rt = util.average(word_rts);
        nonword_rt = util.average(nonword_rts);
        psychoJS.experiment.addData("word_average_acc", word_acc);
        psychoJS.experiment.addData("nonword_average_acc", nonword_acc);
        psychoJS.experiment.addData("word_average_re", word_rt);
        psychoJS.experiment.addData("nonword_average_rt", nonword_rt);
        feedback = "";
        if (((word_acc > nonword_acc) && (word_rt < nonword_rt))) {
            feedback = "You showed a word superiority effect!";
        }
        if (((word_acc > nonword_acc) && (! (word_rt < nonword_rt)))) {
            feedback = "You were more accurate for words versus non words, but you were faster for non words.";
        }
        if (((word_rt < nonword_rt) && (! (word_acc < nonword_acc)))) {
            feedback = "You were faster for words versus non words, but you were more accurate for non words.";
        }
        if (((word_acc < nonword_acc) && (word_rt > nonword_rt))) {
            feedback = "You showed the opposite of a word superiority effect - you were faster and more accurate for non words!";
        }
        feedback += "\n Word accuracy: ";
        feedback += Number.parseInt((word_acc * 100)).toString();
        feedback += "%";
        feedback += "\n Word response time: ";
        feedback += Number.parseInt((word_rt * 1000)).toString();
        feedback += "ms";
        feedback += "\n Non word accuracy: ";
        feedback += Number.parseInt((nonword_acc * 100)).toString();
        feedback += "%";
        feedback += "\n Non word response time: ";
        feedback += Number.parseInt((nonword_rt * 1000)).toString();
        feedback += "ms";
      Begin Routine:
        # get averages
        word_acc = average(word_accuracies)
        nonword_acc = average(nonword_accuracies)
        word_rt = average(word_rts)
        nonword_rt = average(nonword_rts)

        # store to data file
        thisExp.addData('word_average_acc', word_acc)
        thisExp.addData('nonword_average_acc', nonword_acc)
        thisExp.addData('word_average_re', word_rt)
        thisExp.addData('nonword_average_rt', nonword_rt)

        # set up feedback text
        feedback = ''
        if word_acc > nonword_acc and word_rt < nonword_rt:
            feedback = 'You showed a word superiority effect!'
        if word_acc > nonword_acc and not word_rt < nonword_rt:
            feedback = 'You were more accurate for words versus non words, but you were faster for non words.'
        if word_rt < nonword_rt and not word_acc < nonword_acc:
            feedback = 'You were faster for words versus non words, but you were more accurate for non words.'
        if word_acc < nonword_acc and word_rt > nonword_rt:
            feedback = 'You showed the opposite of a word superiority effect - you were faster and more accurate for non words!'

        feedback += '\n Word accuracy: '
        feedback += str(int(word_acc*100))
        feedback += '%'
        feedback += '\n Word response time: '
        feedback += str(int(word_rt*1000))
        feedback += 'ms'
        feedback += '\n Non word accuracy: '
        feedback += str(int(nonword_acc*100))
        feedback += '%'
        feedback += '\n Non word response time: '
        feedback += str(int(nonword_rt*1000))
        feedback += 'ms'
    TextboxComponent fbtxt
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'this_word': 'WORK', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter "K"', 'corr_ans': 'left', 'condition': 'word'},
      {'this_word': 'RWOK', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter "K"', 'corr_ans': 'left', 'condition': 'nonword'},
      {'this_word': 'CART', 'critical_letter': 'T', 'letter_position': 4, 'this_question': 'Did the word contain the letter "T"', 'corr_ans': 'left', 'condition': 'word'},
      {'this_word': 'ARCT', 'critical_letter': 'T', 'letter_position': 4, 'this_question': 'Did the word contain the letter "T"', 'corr_ans': 'left', 'condition': 'nonword'},
      {'this_word': 'WORD', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter K?', 'corr_ans': 'right', 'condition': 'word'},
      {'this_word': 'RWOD', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter K?', 'corr_ans': 'right', 'condition': 'nonword'},
      {'this_word': 'CARD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'left', 'condition': 'word'},
      {'this_word': 'RCAD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'left', 'condition': 'nonword'},
      {'this_word': 'LARD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'right', 'condition': 'word'}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
    Routine trial
  LoopTerminator trials
  Routine end
